# A Model For Human Ventricular Tissue
# 
# Cardiac arrhythmias and sudden cardiac death are amongst the most common causes
# of premature death in the devloped world. However despite their prevalance,
# they remain relatively poorly understood. Mathematical models, which capture
# the function of the beating human heart, play an important role in cardiac
# research. In part this is because practical experiments on human hearts are
# limited, and animal hearts may differ significantly in their anatomy and
# physiology relative to the human heart. In addition, cardiac arrhythmias are
# three dimensional phenomena, while experimental observations are mainly limited
# to surface recordings.
# 
# Existing mathematical models of human ventricular cells include:
# 
# Priebe and Beuckelmann, Electrophysiological Model of the Human Ventricular
# Myocyte, 1998; and
# 
# Bernuset al.A Computationally Efficient Electrophysiological Model of Human
# Ventricular Cells, 2002.
# 
# 
# 
# However, these models have their limitations, such as the fact that several of
# the equations are based on animal data. The aim of the 2004 study by ten
# Tusscheret al., is to develop a new model for human ventricular cells that is
# based on recent experimetnal data and that is computationally efficient for
# large-scale spatial simulations. A schematic diagrma of the modl can be seen
# inbelow.
# 
# The model has been described here in CellML (the raw CellML description of the
# ten Tusscheret al.2004 model can be downloaded in various formats as described
# in).
# 
# The complete original paper reference is cited below:
# 
# A model for human ventricular tissue, K.H.W.J. ten Tusscher, D. Noble, P.J.
# Noble, and A.V. Panfilov, 2004,American Journal of Physiology, 286,
# H1573-H1589. (Full text (HTML)andPDFversions of the article are available to
# subscribers on theAmerican Journal of Physiologywebsite.)PubMed ID: 14656705
# 

# gotran file generated by cellml2gotran from /Users/henriknf/local/src/cell_model/models/cellml/tentusscher_noble_noble_panfilov_2006/tentusscher_noble_noble_panfilov_2006_c.cellml

parameters("Reversal potentials",
           P_kna = ScalarParam(0.03, unit="nA*mM**-1"))

parameters("Inward rectifier potassium current",
           g_K1 = ScalarParam(5.405, unit="nS*pF"))

parameters("Rapid time dependent potassium current",
           g_Kr = ScalarParam(0.096, unit="nS*pF"))

states("Rapid time dependent potassium current", "Xr1 gate",
       Xr1 = 0)

states("Rapid time dependent potassium current", "Xr2 gate",
       Xr2 = 1)

parameters("Slow time dependent potassium current",
           g_Ks = ScalarParam(0.245, unit="nS*pF"))

states("Slow time dependent potassium current", "Xs gate",
       Xs = 0)

parameters("Fast sodium current",
           g_Na = ScalarParam(14.838, unit="nS*pF"))

states("Fast sodium current", "m gate",
       m = 0)

states("Fast sodium current", "h gate",
       h = 0.75)

states("Fast sodium current", "j gate",
       j = 0.75)

parameters("Sodium background current",
           g_bna = ScalarParam(0.00029, unit="nS*pF"))

parameters("L_type Ca current",
           g_CaL = ScalarParam(0.000175, unit="nS*pF"))

states("L_type Ca current", "d gate",
       d = 0)

states("L_type Ca current", "f gate",
       f = 1)

states("L_type Ca current", "FCa gate",
       fCa = 1)

parameters("Calcium background current",
           g_bca = ScalarParam(0.000592, unit="nS*pF"))

parameters("Transient outward current",
           g_to = ScalarParam(0.073, unit="nS*pF"))

states("Transient outward current", "s gate",
       s = 1)

states("Transient outward current", "r gate",
       r = 0)

parameters("Sodium potassium pump current",
           P_NaK = ScalarParam(1.362, unit="pA*pF"),
           K_mk = ScalarParam(1.0, unit="mM"),
           K_mNa = ScalarParam(40.0, unit="mM"))

parameters("Sodium calcium exchanger current",
           K_NaCa = ScalarParam(1000.0, unit="pA*pF"),
           K_sat = 0.1,
           alpha = 2.5,
           gamma = 0.35,
           Km_Ca = ScalarParam(1.38, unit="mM"),
           Km_Nai = ScalarParam(87.5, unit="mM"))

parameters("Calcium pump current",
           g_pCa = ScalarParam(0.825, unit="nS*pF"),
           K_pCa = ScalarParam(0.0005, unit="mM"))

parameters("Potassium pump current",
           g_pK = ScalarParam(0.0146, unit="nS*pF"))

states("Calcium dynamics",
       g = 1,
       Ca_i = ScalarParam(0.0002, unit="mM"),
       Ca_SR = ScalarParam(0.2, unit="mM"))

parameters("Calcium dynamics",
           Ca_o = ScalarParam(2.0, unit="mM"),
           tau_g = ScalarParam(2.0, unit="ms"),
           a_rel = ScalarParam(0.016464, unit="mM*ms**-1"),
           b_rel = ScalarParam(0.25, unit="mM"),
           c_rel = ScalarParam(0.008232, unit="mM*ms**-1"),
           K_up = ScalarParam(0.00025, unit="mM"),
           V_leak = ScalarParam(8e-05, unit="ms**-1"),
           Vmax_up = ScalarParam(0.000425, unit="mM*ms**-1"),
           Buf_c = ScalarParam(0.15, unit="mM"),
           K_buf_c = ScalarParam(0.001, unit="mM"),
           Buf_sr = ScalarParam(10.0, unit="mM"),
           K_buf_sr = ScalarParam(0.3, unit="mM"),
           V_sr = ScalarParam(0.001094, unit="um**3"))

states("Sodium dynamics",
       Na_i = ScalarParam(11.6, unit="mM"))

parameters("Sodium dynamics",
           Na_o = ScalarParam(140.0, unit="mM"))

parameters("Stimulus protocol",
           IstimStart = ScalarParam(100.0, unit="ms"),
           IstimEnd = ScalarParam(50000.0, unit="ms"),
           IstimAmplitude = ScalarParam(-52.0, unit="pA*pF"),
           IstimPeriod = ScalarParam(1000.0, unit="ms"),
           IstimPulseDuration = ScalarParam(1.0, unit="ms"))

states("Membrane",
       V = ScalarParam(-86.2, unit="mV"))

parameters("Membrane",
           R = ScalarParam(8314.472, unit="J*mole**-1*K**-1"),
           T = ScalarParam(310.0, unit="K"),
           F = ScalarParam(96485.3415, unit="C*mM**-1"),
           Cm = ScalarParam(0.185, unit="uF*cm**-2"),
           V_c = ScalarParam(0.016404, unit="um**3"))

states("Potassium dynamics",
       K_i = ScalarParam(138.3, unit="mM"))

parameters("Potassium dynamics",
           K_o = ScalarParam(5.4, unit="mM"))

expressions("Reversal potentials")
E_Na = R*T/F*log(Na_o/Na_i) # mV
E_K = R*T/F*log(K_o/K_i) # mV
E_Ks = R*T/F*log((K_o + P_kna*Na_o)/(K_i + P_kna*Na_i)) # mV
E_Ca = 0.5*R*T/F*log(Ca_o/Ca_i) # mV

expressions("Inward rectifier potassium current")
alpha_K1 = 0.1/(1.0 + exp(0.06*(V - E_K - 200.0)))
beta_K1 = (3.0*exp(0.0002*(V - E_K + 100.0)) + exp(0.1*(V - E_K - 10.0)))/(1.0 + exp(-0.5*(V - E_K)))
xK1_inf = alpha_K1/(alpha_K1 + beta_K1)
i_K1 = g_K1*xK1_inf*(V - E_K) # pA*pF

expressions("Rapid time dependent potassium current")
i_Kr = g_Kr*sqrt(K_o/5.4)*Xr1*Xr2*(V - E_K) # pA*pF

expressions("Rapid time dependent potassium current", "Xr1 gate")
xr1_inf = 1.0/(1.0 + exp((-26.0 - V)/7.0))
alpha_xr1 = 450.0/(1.0 + exp((-45.0 - V)/10.0)) # ms**-1
beta_xr1 = 6.0/(1.0 + exp((V + 30.0)/11.5)) # ms**-1
tau_xr1 = alpha_xr1*beta_xr1 # ms
dXr1_dt = (xr1_inf - Xr1)/tau_xr1

expressions("Rapid time dependent potassium current", "Xr2 gate")
xr2_inf = 1.0/(1.0 + exp((V + 88.0)/24.0))
alpha_xr2 = 3.0/(1.0 + exp((-60.0 - V)/20.0)) # ms**-1
beta_xr2 = 1.12/(1.0 + exp((V - 60.0)/20.0)) # ms**-1
tau_xr2 = alpha_xr2*beta_xr2 # ms
dXr2_dt = (xr2_inf - Xr2)/tau_xr2

expressions("Slow time dependent potassium current")
i_Ks = g_Ks*Xs**2.0*(V - E_Ks) # pA*pF

expressions("Slow time dependent potassium current", "Xs gate")
xs_inf = 1.0/(1.0 + exp((-5.0 - V)/14.0))
alpha_xs = 1100.0/sqrt(1.0 + exp((-10.0 - V)/6.0)) # ms**-1
beta_xs = 1.0/(1.0 + exp((V - 60.0)/20.0)) # ms**-1
tau_xs = alpha_xs*beta_xs # ms
dXs_dt = (xs_inf - Xs)/tau_xs

expressions("Fast sodium current")
i_Na = g_Na*m**3.0*h*j*(V - E_Na) # pA*pF

expressions("Fast sodium current", "m gate")
m_inf = 1.0/(1.0 + exp((-56.86 - V)/9.03))**2.0
alpha_m = 1.0/(1.0 + exp((-60.0 - V)/5.0)) # ms**-1
beta_m = 0.1/(1.0 + exp((V + 35.0)/5.0)) + 0.1/(1.0 + exp((V - 50.0)/200.0)) # ms**-1
tau_m = alpha_m*beta_m # ms
dm_dt = (m_inf - m)/tau_m

expressions("Fast sodium current", "h gate")
h_inf = 1.0/(1.0 + exp((V + 71.55)/7.43))**2.0
alpha_h = Conditional(Lt(V, -40.0), 0.057*exp(-(V + 80.0)/6.8), 0.0) # ms**-1
beta_h = Conditional(Lt(V, -40.0), 2.7*exp(0.079*V) + 310000.0*exp(0.3485*V), 0.77/(0.13*(1.0 + exp((V + 10.66)/-11.1)))) # ms**-1
tau_h = 1.0/(alpha_h + beta_h) # ms
dh_dt = (h_inf - h)/tau_h

expressions("Fast sodium current", "j gate")
j_inf = 1.0/(1.0 + exp((V + 71.55)/7.43))**2.0
alpha_j = Conditional(Lt(V, -40.0), (-25428.0*exp(0.2444*V) - 6.948e-6*exp(-0.04391*V))*(V + 37.78)/(1.0 + exp(0.311*(V + 79.23))), 0.0) # ms**-1
beta_j = Conditional(Lt(V, -40.0), 0.02424*exp(-0.01052*V)/(1.0 + exp(-0.1378*(V + 40.14))), 0.6*exp(0.057*V)/(1.0 + exp(-0.1*(V + 32.0)))) # ms**-1
tau_j = 1.0/(alpha_j + beta_j) # ms
dj_dt = (j_inf - j)/tau_j

expressions("Sodium background current")
i_b_Na = g_bna*(V - E_Na) # pA*pF

expressions("L_type Ca current")
i_CaL = g_CaL*d*f*fCa*4.0*V*F**2.0/(R*T)*(Ca_i*exp(2.0*V*F/(R*T)) - 0.341*Ca_o)/(exp(2.0*V*F/(R*T)) - 1.0) # pA*pF

expressions("L_type Ca current", "d gate")
d_inf = 1.0/(1.0 + exp((-5.0 - V)/7.5))
alpha_d = 1.4/(1.0 + exp((-35.0 - V)/13.0)) + 0.25 # ms**-1
beta_d = 1.4/(1.0 + exp((V + 5.0)/5.0)) # ms**-1
gamma_d = 1.0/(1.0 + exp((50.0 - V)/20.0)) # ms**-1
tau_d = alpha_d*beta_d + gamma_d # ms
dd_dt = (d_inf - d)/tau_d

expressions("L_type Ca current", "f gate")
f_inf = 1.0/(1.0 + exp((V + 20.0)/7.0))
tau_f = 1125.0*exp(-((V + 27.0)**2.0)/240.0) + 80.0 + 165.0/(1.0 + exp((25.0 - V)/10.0)) # ms
df_dt = (f_inf - f)/tau_f

expressions("L_type Ca current", "FCa gate")
alpha_fCa = 1.0/(1.0 + (Ca_i/0.000325)**8.0)
beta_fCa = 0.1/(1.0 + exp((Ca_i - 0.0005)/0.0001))
gama_fCa = 0.2/(1.0 + exp((Ca_i - 0.00075)/0.0008))
fCa_inf = (alpha_fCa + beta_fCa + gama_fCa + 0.23)/1.46
tau_fCa = 2.0 # ms
d_fCa = (fCa_inf - fCa)/tau_fCa
dfCa_dt = Conditional(And(Gt(0.01*d_fCa, 0.0), Gt(V, -60.0), ), 0.0, d_fCa)

expressions("Calcium background current")
i_b_Ca = g_bca*(V - E_Ca) # pA*pF

expressions("Transient outward current")
i_to = g_to*r*s*(V - E_K) # pA*pF

expressions("Transient outward current", "s gate")
s_inf = 1.0/(1.0 + exp((V + 28.0)/5.0))
tau_s = 1000.0*exp(-((V + 67.0)**2.0)/1000.0) + 8.0
ds_dt = (s_inf - s)/tau_s

expressions("Transient outward current", "r gate")
r_inf = 1.0/(1.0 + exp((20.0 - V)/6.0))
tau_r = 9.5*exp(-((V + 40.0)**2.0)/1800.0) + 0.8 # ms
dr_dt = (r_inf - r)/tau_r

expressions("Sodium potassium pump current")
i_NaK = P_NaK*K_o/(K_o + K_mk)*Na_i/(Na_i + K_mNa)/(1.0 + 0.1245*exp(-0.1*V*F/(R*T)) + 0.0353*exp(-V*F/(R*T))) # pA*pF

expressions("Sodium calcium exchanger current")
i_NaCa = K_NaCa*(exp(gamma*V*F/(R*T))*Na_i**3.0*Ca_o - exp((gamma - 1.0)*V*F/(R*T))*Na_o**3.0*Ca_i*alpha)/((Km_Nai**3.0 + Na_o**3.0)*(Km_Ca + Ca_o)*(1.0 + K_sat*exp((gamma - 1.0)*V*F/(R*T)))) # pA*pF

expressions("Calcium pump current")
i_p_Ca = g_pCa*Ca_i/(Ca_i + K_pCa) # pA*pF

expressions("Potassium pump current")
i_p_K = g_pK*(V - E_K)/(1.0 + exp((25.0 - V)/5.98)) # pA*pF

expressions("Calcium dynamics")
i_rel = (a_rel*Ca_SR**2.0/(b_rel**2.0 + Ca_SR**2.0) + c_rel)*d*g # mM*ms**-1
i_up = Vmax_up/(1.0 + K_up**2.0/Ca_i**2.0) # mM*ms**-1
i_leak = V_leak*(Ca_SR - Ca_i) # mM*ms**-1
g_inf = Conditional(Lt(Ca_i, 0.00035), 1.0/(1.0 + (Ca_i/0.00035)**6.0), 1.0/(1.0 + (Ca_i/0.00035)**16.0))
d_g = (g_inf - g)/tau_g
dg_dt = Conditional(And(Gt(0.01*d_g, 0.0), Gt(V, -60.0), ), 0.0, d_g)
Ca_i_bufc = 1.0/(1.0 + Buf_c*K_buf_c/(Ca_i + K_buf_c)**2.0) # mM
Ca_sr_bufsr = 1.0/(1.0 + Buf_sr*K_buf_sr/(Ca_SR + K_buf_sr)**2.0) # mM
dCa_i_dt = Ca_i_bufc*(i_leak - i_up + i_rel - (i_CaL + i_b_Ca + i_p_Ca - 2.0*i_NaCa)/(2.0*V_c*F)*Cm)
dCa_SR_dt = Ca_sr_bufsr*V_c/V_sr*(i_up - (i_rel + i_leak))

expressions("Sodium dynamics")
dNa_i_dt = -(i_Na + i_b_Na + 3.0*i_NaK + 3.0*i_NaCa)/(V_c*F)*Cm

expressions("Stimulus protocol")
Istim = Conditional(And(Ge(time, IstimStart), Le(time, IstimEnd), Le(time - IstimStart - floor((time - IstimStart)/IstimPeriod)*IstimPeriod, IstimPulseDuration), ), IstimAmplitude, 0.0) # pA*pF

expressions("Membrane")
i_Stim = Istim # pA*pF
dV_dt = -1.0/1.0*(i_K1 + i_to + i_Kr + i_Ks + i_CaL + i_NaK + i_Na + i_b_Na + i_NaCa + i_b_Ca + i_p_K + i_p_Ca + i_Stim)

expressions("Potassium dynamics")
dK_i_dt = -(i_K1 + i_to + i_Kr + i_Ks + i_p_K + i_Stim - 2.0*i_NaK)/(V_c*F)*Cm

